<?
include_once ($template_directory . 'prepare_variables.php');
?> 

!=============================
!Open files
!=============================

Manage_Theia3D_Merge
/ROOT_FOLDER=<?=$working_directory;?> 
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! /TAGS=ACTION
/IMPORT_ANALOG_FILES=TRUE
! /MERGE_THEIA3D_FILES=FALSE
! /MERGE_THEIA3D_AND_OTHER_FILES=FALSE
/THEIA3D_SESSION_FOLDER=TheiaFormatData
/THEIA3D_FILE_MASK=*pose_subject.c3d
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/OTHER3D_SESSION_FOLDER=<?=$session["Filename"];?> 
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/SAVE_DEFAULT_CMZ_FILES=FALSE
! /OPEN_CMZ_LIBRARY=FALSE
/INPUT_FOLDER_STRUCTURE=QTM
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;

<?
foreach($measurements as $m) {
	if($m["Used"] === "True") {
?> 
		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=*Dynamic*.c3d
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		/TAGS=<?=$m["Measurement_type"];?> 
		;

		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=*Dynamic*.c3d
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		/TAGS=<?=$session['Test_condition'];?> 
		;

		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=*Dynamic*.c3d
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		/TAGS=<?=$m['Comments'];?> 
		;

<?
	}
}?> 

Recalc
;

<?
include_once ($template_directory . 'markerless_model_calculations.v3s');
include_once ($template_directory . 'add_meta_data_to_report.v3s');
include_once ($template_directory . 'define_virtual_lab.v3s');
?> 

Call_Script
/SCRIPT_FILE_NAME=<?=$template_directory . 'processing.v3s'; ?> 
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;

!Save cmz
File_Save_As
/FILE_NAME=<?=$working_directory . 'Report.cmz'; ?> 
;